<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!-- Simple model of blood volume with new osmotic expression-->
    <units name="dim">
        <unit units="dimensionless"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="L_per_s">
        <unit units="litre"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="kPa">
        <unit units="joule"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="kPa_s_per_L">
        <unit units="kPa"/>
        <unit units="second"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="kPa_per_L">
        <unit units="kPa"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="L_per_s_per_kPa">
        <unit units="L_per_s"/>
        <unit exponent="-1" units="kPa"/>
    </units>
    <units name="per_mol">
        <unit exponent="-1" units="mole"/>
    </units>
    <units name="mM">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="millimols_per_mol">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="mole"/>
    </units>
    <units name="mM_per_mol">
        <unit units="mM"/>
        <unit exponent="-1" units="mole"/>
    </units>
    <units name="mol_per_s">
        <unit units="mole"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="mol_per_L">
        <unit units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="L_per_mol">
        <unit units="litre"/>
        <unit exponent="-1" units="mole"/>
    </units>
    <units name="J_per_mol">
        <unit units="joule"/>
        <unit exponent="-1" units="mole"/>
    </units>
    <units name="J_per_C">
        <unit units="joule"/>
        <unit exponent="-1" units="coulomb"/>
    </units>
    <units name="C_per_mol">
        <unit units="coulomb"/>
        <unit exponent="-1" units="mole"/>
    </units>
    <component name="main">
        <variable name="t" units="second"/>
        <variable initial_value="2.5e3" name="RT" units="J_per_mol"/>
        <variable initial_value="0.965e5" name="F" units="C_per_mol"/>
        <variable initial_value="-0.040" name="u_e" units="J_per_C"/>
        <variable initial_value="1.e3" name="K_mm" units="millimols_per_mol"/>
        <!-- ODEs for water storage -->
        <variable initial_value="1" name="q_gi_w" units="litre"/>
        <variable initial_value="0.5" name="q_epiGi_w" units="litre"/>
        <variable initial_value="1" name="q_pt_w" units="litre"/>
        <variable initial_value="0.5" name="q_epiPt_w" units="litre"/>
        <variable initial_value="2" name="q_vc_b" units="litre"/>
        <variable initial_value="1" name="q_ac_b" units="litre"/>
        <variable initial_value="1" name="k_Hb" units="dim"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_gi_w</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_in_w</ci>
                        <ci>v_apexGi_w</ci>
                    </apply>
                    <ci>v_out1_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_epiGi_w</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_apexGi_w</ci>
                    <ci>v_baseGi_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_pt_w</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_gl_w</ci>
                        <ci>v_apexPt_w</ci>
                    </apply>
                    <ci>v_out2_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_epiPt_w</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_apexPt_w</ci>
                    <ci>v_basePt_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_vc_b</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <apply>
                                <plus/>
                                <ci>v_baseGi_w</ci>
                                <ci>v_basePt_w</ci>
                            </apply>
                            <ci>k_Hb</ci>
                        </apply>
                        <ci>v_cc_b</ci>
                    </apply>
                    <ci>v_lv_b</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_ac_b</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_lv_b</ci>
                        <ci>v_cc_b</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>v_gl_w</ci>
                        <ci>k_Hb</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <variable name="q_tot_w" units="litre"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>q_tot_w</ci>
                <apply>
                    <plus/>
                    <ci>q_gi_w</ci>
                    <ci>q_epiGi_w</ci>
                    <ci>q_pt_w</ci>
                    <ci>q_epiPt_w</ci>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <ci>q_vc_b</ci>
                            <ci>q_ac_b</ci>
                        </apply>
                        <ci>k_Hb</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- ODEs for sodium storage -->
        <variable initial_value="0.1" name="q_gi_Na" units="mole"/>
        <variable initial_value="0.012" name="q_epiGi_Na" units="mole"/>
        <variable initial_value="0.01" name="q_pt_Na" units="mole"/>
        <variable initial_value="0.012" name="q_epiPt_Na" units="mole"/>
        <variable initial_value="0.84" name="q_cvs_Na" units="mole"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_gi_Na</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_in_Na</ci>
                        <apply>
                            <times/>
                            <cn cellml:units="dim">2</cn>
                            <ci>v_gi_SGLT1</ci>
                        </apply>
                    </apply>
                    <ci>v_out1_Na</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_epiGi_Na</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="dim">2</cn>
                        <ci>v_gi_SGLT1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dim">3</cn>
                        <ci>v_gi_NKE</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_pt_Na</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_gl_Na</ci>
                        <apply>
                            <times/>
                            <cn cellml:units="dim">2</cn>
                            <ci>v_pt_SGLT1</ci>
                        </apply>
                    </apply>
                    <ci>v_out2_Na</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_epiPt_Na</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="dim">2</cn>
                        <ci>v_pt_SGLT1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dim">3</cn>
                        <ci>v_pt_NKE</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_cvs_Na</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dim">3</cn>
                            <ci>v_gi_NKE</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dim">3</cn>
                            <ci>v_pt_NKE</ci>
                        </apply>
                    </apply>
                    <ci>v_gl_Na</ci>
                </apply>
            </apply>
        </math>
        <variable name="q_tot_Na" units="mole"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>q_tot_Na</ci>
                <apply>
                    <plus/>
                    <ci>q_gi_Na</ci>
                    <ci>q_epiGi_Na</ci>
                    <ci>q_pt_Na</ci>
                    <ci>q_epiPt_Na</ci>
                    <ci>q_cvs_Na</ci>
                </apply>
            </apply>
        </math>
        <!-- Hydraulic pressures (J/L)-->
        <variable name="u_gi_w" units="kPa"/>
        <variable name="u_pt_w" units="kPa"/>
        <variable name="u_epiGi_w" units="kPa"/>
        <variable name="u_epiPt_w" units="kPa"/>
        <variable name="u_vc_b" units="kPa"/>
        <variable name="u_ac_b" units="kPa"/>
        <variable initial_value="1" name="E_gi" units="joule"/>
        <variable initial_value="1" name="E_pt" units="joule"/>
        <variable initial_value="1" name="E_epiGi" units="joule"/>
        <variable initial_value="1" name="E_epiPt" units="joule"/>
        <variable initial_value="6e1" name="E_vc" units="joule"/>
        <variable initial_value="6e1" name="E_ac" units="joule"/>
        <variable initial_value="1" name="U_gi_w" units="litre"/>
        <variable initial_value="1" name="U_pt_w" units="litre"/>
        <variable initial_value="0.5" name="U_epiGi_w" units="litre"/>
        <variable initial_value="0.5" name="U_epiPt_w" units="litre"/>
        <variable initial_value="1.5" name="U_vc_b" units="litre"/>
        <variable initial_value="0.5" name="U_ac_b" units="litre"/>
        <variable initial_value="5" name="L_gi_w" units="litre"/>
        <variable initial_value="5" name="L_pt_w" units="litre"/>
        <variable initial_value="5" name="L_epiGi_w" units="litre"/>
        <variable initial_value="5" name="L_epiPt_w" units="litre"/>
        <variable initial_value="5" name="L_vc_b" units="litre"/>
        <variable initial_value="5" name="L_ac_b" units="litre"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>u_gi_w</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>E_gi</ci>
                        <apply>
                            <minus/>
                            <ci>q_gi_w</ci>
                            <ci>U_gi_w</ci>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <apply>
                            <minus/>
                            <ci>L_gi_w</ci>
                            <ci>q_gi_w</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_pt_w</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>E_pt</ci>
                        <apply>
                            <minus/>
                            <ci>q_pt_w</ci>
                            <ci>U_pt_w</ci>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <apply>
                            <minus/>
                            <ci>L_pt_w</ci>
                            <ci>q_pt_w</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_epiGi_w</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>E_epiGi</ci>
                        <apply>
                            <minus/>
                            <ci>q_epiGi_w</ci>
                            <ci>U_epiGi_w</ci>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <apply>
                            <minus/>
                            <ci>L_epiGi_w</ci>
                            <ci>q_epiGi_w</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_epiPt_w</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>E_epiPt</ci>
                        <apply>
                            <minus/>
                            <ci>q_epiPt_w</ci>
                            <ci>U_epiPt_w</ci>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <apply>
                            <minus/>
                            <ci>L_epiPt_w</ci>
                            <ci>q_epiPt_w</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_vc_b</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>E_vc</ci>
                        <apply>
                            <minus/>
                            <ci>q_vc_b</ci>
                            <ci>U_vc_b</ci>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <apply>
                            <minus/>
                            <ci>L_vc_b</ci>
                            <ci>q_vc_b</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_ac_b</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>E_ac</ci>
                        <apply>
                            <minus/>
                            <ci>q_ac_b</ci>
                            <ci>U_ac_b</ci>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <apply>
                            <minus/>
                            <ci>L_ac_b</ci>
                            <ci>q_ac_b</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Water fluxes (L/s)-->
        <variable name="v_apexGi_w" units="L_per_s"/>
        <variable name="v_baseGi_w" units="L_per_s"/>
        <variable name="v_apexPt_w" units="L_per_s"/>
        <variable name="v_basePt_w" units="L_per_s"/>
        <variable name="v_cc_b" units="L_per_s"/>
        <variable name="v_gl_w" units="L_per_s"/>
        <variable initial_value="0.1" name="v_lv_b" units="L_per_s"/>
        <variable initial_value="1e-2" name="v_in_w" units="L_per_s"/>
        <variable initial_value="0" name="v_out1_w" units="L_per_s"/>
        <variable initial_value="1e-2" name="v_out2_w" units="L_per_s"/>
        <variable initial_value="1e-4" name="k_m_w" units="L_per_s_per_kPa"/>
        <variable initial_value="1e-1" name="k_cc_b" units="L_per_s_per_kPa"/>
        <variable initial_value="1e-2" name="k_gl_w" units="L_per_s_per_kPa"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_apexGi_w</ci>
                <apply>
                    <times/>
                    <ci>k_m_w</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_gi_w</ci>
                            <ci>u_epiGi_w</ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci>RT</ci>
                                <ci>K_mm</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <ci>c_gi_Na</ci>
                                <ci>c_epiGi_Na</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_baseGi_w</ci>
                <apply>
                    <times/>
                    <ci>k_m_w</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_epiGi_w</ci>
                            <apply>
                                <times/>
                                <ci>k_Hb</ci>
                                <ci>u_vc_b</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci>RT</ci>
                                <ci>K_mm</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <ci>c_epiGi_Na</ci>
                                <ci>c_cvs_Na</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_apexPt_w</ci>
                <apply>
                    <times/>
                    <ci>k_m_w</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_pt_w</ci>
                            <ci>u_epiPt_w</ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci>RT</ci>
                                <ci>K_mm</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <ci>c_pt_Na</ci>
                                <ci>c_epiPt_Na</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_basePt_w</ci>
                <apply>
                    <times/>
                    <ci>k_m_w</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_epiPt_w</ci>
                            <apply>
                                <times/>
                                <ci>k_Hb</ci>
                                <ci>u_vc_b</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <ci>RT</ci>
                                <ci>K_mm</ci>
                            </apply>
                            <apply>
                                <minus/>
                                <ci>c_epiPt_Na</ci>
                                <ci>c_cvs_Na</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_cc_b</ci>
                <apply>
                    <times/>
                    <ci>k_cc_b</ci>
                    <apply>
                        <minus/>
                        <ci>u_ac_b</ci>
                        <ci>u_vc_b</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_gl_w</ci>
                <apply>
                    <times/>
                    <ci>k_gl_w</ci>
                    <apply>
                        <minus/>
                        <ci>u_ac_b</ci>
                        <ci>u_pt_w</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Sodium concentrations (mM=millimol/L))-->
        <variable name="c_gi_Na" units="mM"/>
        <variable name="c_pt_Na" units="mM"/>
        <variable name="c_epiGi_Na" units="mM"/>
        <variable name="c_epiPt_Na" units="mM"/>
        <variable name="c_cvs_Na" units="mM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>c_gi_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>q_gi_Na</ci>
                        <ci>K_mm</ci>
                    </apply>
                    <ci>q_gi_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c_pt_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>q_pt_Na</ci>
                        <ci>K_mm</ci>
                    </apply>
                    <ci>q_pt_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c_epiGi_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>q_epiGi_Na</ci>
                        <ci>K_mm</ci>
                    </apply>
                    <ci>q_epiGi_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c_epiPt_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>q_epiPt_Na</ci>
                        <ci>K_mm</ci>
                    </apply>
                    <ci>q_epiPt_w</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c_cvs_Na</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>q_cvs_Na</ci>
                        <ci>K_mm</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>q_vc_b</ci>
                        <ci>q_ac_b</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Sodium fluxes (mol/s)-->
        <variable name="v_gi_SGLT1" units="mol_per_s"/>
        <variable name="v_pt_SGLT1" units="mol_per_s"/>
        <variable name="v_gi_NKE" units="mol_per_s"/>
        <variable name="v_pt_NKE" units="mol_per_s"/>
        <variable name="v_gl_Na" units="mol_per_s"/>
        <variable initial_value="1.16e-6" name="v_in_Na" units="mol_per_s"/>
        <variable initial_value="0" name="v_out1_Na" units="mol_per_s"/>
        <variable initial_value="1.16e-6" name="v_out2_Na" units="mol_per_s"/>
        <variable initial_value="0.012" name="c_epiGi_K" units="mM"/>
        <variable initial_value="0.012" name="c_epiPt_K" units="mM"/>
        <variable initial_value="0.03" name="c_cvs_K" units="mM"/>
        <variable initial_value="10" name="c_gi_glc" units="mM"/>
        <variable initial_value="10" name="c_pt_glc" units="mM"/>
        <variable initial_value="10" name="c_epiGi_glc" units="mM"/>
        <variable initial_value="10" name="c_epiPt_glc" units="mM"/>
        <variable initial_value="10" name="c_ATP" units="mM"/>
        <variable initial_value="0.1" name="c_ADP" units="mM"/>
        <variable initial_value="0.1" name="c_Pi" units="mM"/>
        <variable initial_value="1" name="kappa_gi_SGLT1" units="mol_per_s"/>
        <variable initial_value="1" name="kappa_pt_SGLT1" units="mol_per_s"/>
        <variable initial_value="1" name="kappa_gi_NKE" units="mol_per_s"/>
        <variable initial_value="1" name="kappa_pt_NKE" units="mol_per_s"/>
        <variable initial_value="1" name="kappa_gl_Na" units="mol_per_s"/>
        <variable initial_value="1" name="k_gi_SGLT1" units="mM"/>
        <variable initial_value="1" name="k_pt_SGLT1" units="mM"/>
        <variable initial_value="1" name="k_epiGi_SGLT1" units="mM"/>
        <variable initial_value="1" name="k_epiPt_SGLT1" units="mM"/>
        <variable initial_value="1" name="k_epiGi_NKE" units="mM"/>
        <variable initial_value="1" name="k_epiPt_NKE" units="mM"/>
        <variable initial_value="1" name="k_cvs_NKE" units="mM"/>
        <variable initial_value="1.4e5" name="k_equil_ATP" units="mM"/>
        <variable initial_value="1" name="K_pt_Na" units="per_mol"/>
        <variable initial_value="1" name="K_cvs_Na" units="per_mol"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_gi_SGLT1</ci>
                <apply>
                    <times/>
                    <ci>kappa_gi_SGLT1</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_gi_Na</ci>
                                        <ci>c_epiGi_Na</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <apply>
                                    <divide/>
                                    <ci>c_gi_glc</ci>
                                    <ci>c_epiGi_glc</ci>
                                </apply>
                            </apply>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="dim">2</cn>
                                        <ci>F</ci>
                                        <ci>u_e</ci>
                                    </apply>
                                    <ci>RT</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_gi_Na</ci>
                                        <ci>k_gi_SGLT1</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiGi_Na</ci>
                                        <ci>k_epiGi_SGLT1</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_pt_SGLT1</ci>
                <apply>
                    <times/>
                    <ci>kappa_pt_SGLT1</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_pt_Na</ci>
                                        <ci>c_epiPt_Na</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <apply>
                                    <divide/>
                                    <ci>c_pt_glc</ci>
                                    <ci>c_epiPt_glc</ci>
                                </apply>
                            </apply>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="dim">2</cn>
                                        <ci>F</ci>
                                        <ci>u_e</ci>
                                    </apply>
                                    <ci>RT</ci>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_pt_Na</ci>
                                        <ci>k_pt_SGLT1</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiPt_Na</ci>
                                        <ci>k_epiPt_SGLT1</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_gi_NKE</ci>
                <apply>
                    <times/>
                    <ci>kappa_gi_NKE</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiGi_Na</ci>
                                        <ci>c_cvs_Na</ci>
                                    </apply>
                                    <cn cellml:units="dim">3</cn>
                                </apply>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>c_ATP</ci>
                                        <ci>k_equil_ATP</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>c_ADP</ci>
                                        <ci>c_Pi</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiGi_K</ci>
                                        <ci>c_cvs_K</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <ci>F</ci>
                                            <ci>u_e</ci>
                                        </apply>
                                        <ci>RT</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiGi_Na</ci>
                                        <ci>k_epiGi_NKE</ci>
                                    </apply>
                                    <cn cellml:units="dim">3</cn>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_cvs_Na</ci>
                                        <ci>k_cvs_NKE</ci>
                                    </apply>
                                    <cn cellml:units="dim">3</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_pt_NKE</ci>
                <apply>
                    <times/>
                    <ci>kappa_pt_NKE</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiPt_Na</ci>
                                        <ci>c_cvs_Na</ci>
                                    </apply>
                                    <cn cellml:units="dim">3</cn>
                                </apply>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>c_ATP</ci>
                                        <ci>k_equil_ATP</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>c_ADP</ci>
                                        <ci>c_Pi</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiPt_K</ci>
                                        <ci>c_cvs_K</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <ci>F</ci>
                                            <ci>u_e</ci>
                                        </apply>
                                        <ci>RT</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_epiPt_Na</ci>
                                        <ci>k_epiPt_NKE</ci>
                                    </apply>
                                    <cn cellml:units="dim">3</cn>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <cn cellml:units="dim">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>c_cvs_Na</ci>
                                        <ci>k_cvs_NKE</ci>
                                    </apply>
                                    <cn cellml:units="dim">3</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_gl_Na</ci>
                <apply>
                    <times/>
                    <ci>kappa_gl_Na</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>K_cvs_Na</ci>
                            <ci>q_cvs_Na</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>K_pt_Na</ci>
                            <ci>q_pt_Na</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
